CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "2333_5_section9")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MouseID>[0-9]{4}_[0-9])_Section(?P<Section>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Section")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MouseID>[0-9]{4}_[0-9])_section(?P<Section>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "section")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "594")
    Name to assign these images:RFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "647")
    Name to assign these images:_647
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:MouseID
    Metadata category:Section

ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:Gray_DAPI
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:GFP
    Conversion method:Combine
    Image type:RGB
    Name the output image:Gray_GFP
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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
    Select the input image:RFP
    Conversion method:Combine
    Image type:RGB
    Name the output image:Gray_RFP
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:8|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
    Select the input image:_647
    Conversion method:Combine
    Image type:RGB
    Name the output image:Gray_647
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Gray_DAPI
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):6,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0065,1.0
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    Size of adaptive window:10
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    Thresholding method:Sauvola

MaskImage:[module_num:10|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
    Select the input image:Gray_DAPI
    Name the output image:MaskDNA
    Use objects or an image as a mask?:Objects
    Select object for mask:DNA
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    Invert the mask?:No

MaskImage:[module_num:11|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
    Select the input image:Gray_RFP
    Name the output image:MaskDNA_RFP
    Use objects or an image as a mask?:Objects
    Select object for mask:DNA
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:MaskDNA_RFP
    Name the primary objects to be identified:CCR2
    Typical diameter of objects, in pixel units (Min,Max):6,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.09,1.0
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    Size of adaptive window:10
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    Thresholding method:Sauvola

MaskImage:[module_num:13|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
    Select the input image:Gray_GFP
    Name the output image:MaskDNA_GFP
    Use objects or an image as a mask?:Objects
    Select object for mask:DNA
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:MaskDNA_GFP
    Name the primary objects to be identified:CX3CR1
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Size of adaptive window:10
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    Thresholding method:Sauvola

MaskImage:[module_num:15|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
    Select the input image:Gray_647
    Name the output image:MaskDNA_647
    Use objects or an image as a mask?:Objects
    Select object for mask:DNA
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:MaskDNA_647
    Name the primary objects to be identified:CD3
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.2,1.0
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    Size of adaptive window:5
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    Thresholding method:Sauvola

RelateObjects:[module_num:17|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
    Parent objects:CX3CR1
    Child objects:CCR2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MDSC
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
MaskImage:[module_num:18|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
    Select the input image:Gray_DAPI
    Name the output image:UnMaskDNA_CCR2
    Use objects or an image as a mask?:Objects
    Select object for mask:CCR2
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    Invert the mask?:Yes

MaskImage:[module_num:19|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
    Select the input image:UnMaskDNA_CCR2
    Name the output image:UnMaskDNA_CCR2_CX3CR1
    Use objects or an image as a mask?:Objects
    Select object for mask:CX3CR1
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    Invert the mask?:Yes

MaskImage:[module_num:20|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
    Select the input image:UnMaskDNA_CCR2_CX3CR1
    Name the output image:UnMaskDNA_CCR2_CX3CR1_CD3
    Use objects or an image as a mask?:Objects
    Select object for mask:CD3
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:UnMaskDNA_CCR2_CX3CR1_CD3
    Name the primary objects to be identified:CancerCells
    Typical diameter of objects, in pixel units (Min,Max):6,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0065,1.0
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    Size of adaptive window:10
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    Thresholding method:Sauvola

GrayToColor:[module_num:22|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorMaskDNA_RFP
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    Hidden:1
    Image name:MaskDNA_RFP
    Color:#ff0000
    Weight:1.0

GrayToColor:[module_num:23|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorMaskDNA_GFP
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    Hidden:1
    Image name:MaskDNA_GFP
    Color:#21FF06
    Weight:1.0

GrayToColor:[module_num:24|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorMaskDNA
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    Hidden:1
    Image name:MaskDNA
    Color:#0000FF
    Weight:1.0

GrayToColor:[module_num:25|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorMaskDNA_647
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    Hidden:1
    Image name:MaskDNA_647
    Color:#FFFFFF
    Weight:1.0

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorMaskDNA
    Name the output image:Overlay_ColorMaskDNA_CancerCells
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:CancerCells

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorMaskDNA_647
    Name the output image:Overlay_ColorMaskDNA_CD3
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:CD3

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorMaskDNA_GFP
    Name the output image:Overlay_ColorMaskDNA_GFP_MDSC
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:MDSC

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorMaskDNA_RFP
    Name the output image:Overlay_ColorMaskDNA_RFP_MDSC
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:MDSC

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:Overlay_ColorMaskDNA_CD3
    Select method for constructing file names:From image filename
    Select image name for file prefix:_647
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/CellProfilerOutput/\g<MouseID>_Section\g<Section>/ProcessedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:Overlay_ColorMaskDNA_CancerCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/CellProfilerOutput/\g<MouseID>_Section\g<Section>/ProcessedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:Overlay_ColorMaskDNA_GFP_MDSC
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/CellProfilerOutput/\g<MouseID>_Section\g<Section>/ProcessedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:Overlay_ColorMaskDNA_RFP_MDSC
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/CellProfilerOutput/\g<MouseID>_Section\g<Section>/ProcessedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/CellProfilerOutput/\g<MouseID>_Section\g<Section>/Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Height__647,Image|Height_RFP,Image|Height_DAPI,Image|Height_GFP,Image|Width__647,Image|Width_RFP,Image|Width_DAPI,Image|Width_GFP,MDSC|Location_Center_Y,MDSC|Location_Center_Z,MDSC|Location_Center_X,CancerCells|Location_Center_Y,CancerCells|Location_Center_Z,CancerCells|Location_Center_X,CD3|Location_Center_Y,CD3|Location_Center_X,CD3|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MDSC
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CD3
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CancerCells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
